<CompuCell3D Revision="6" Version="4.4.1">
    <Metadata>
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
    </Metadata>
    <Potts>
        <Dimensions x="400" y="400" z="1"></Dimensions>
        <Steps>100000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>2</NeighborOrder>
    </Potts>
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"></CellType>
        <CellType TypeId="1" TypeName="Cell"></CellType>
        <CellType TypeName="CellA" TypeId="2"></CellType>
        <CellType TypeName="CellA_1" TypeId="3"></CellType>
        <CellType TypeName="CellA_2" TypeId="4"></CellType>
        <CellType TypeName="CellC" TypeId="5"></CellType>
        <CellType TypeName="CellB" TypeId="6"></CellType>
        <CellType TypeName="CellD" TypeId="7"></CellType>
    </Plugin>
    <Plugin Name="CenterOfMass">
   </Plugin>
    <Plugin Name="Volume"></Plugin>
    <Plugin Name="NeighborTracker">
   </Plugin>
    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Cell">10.0</Energy>
        <Energy Type1="Cell" Type2="Cell">5.0</Energy>
        <NeighborOrder>4</NeighborOrder>
        <Energy Type1="CellA" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA_1" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA_1">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA_1">10.0</Energy>
        <Energy Type1="CellA_1" Type2="CellA_1">10.0</Energy>
        <Energy Type1="CellA_2" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA_2">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA_2">10.0</Energy>
        <Energy Type1="CellA_1" Type2="CellA_2">10.0</Energy>
        <Energy Type1="CellA_2" Type2="CellA_2">10.0</Energy>
        <Energy Type1="CellC" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellC">10.0</Energy>
        <Energy Type1="CellA" Type2="CellC">10.0</Energy>
        <Energy Type1="CellA_1" Type2="CellC">10.0</Energy>
        <Energy Type1="CellA_2" Type2="CellC">10.0</Energy>
        <Energy Type1="CellC" Type2="CellC">10.0</Energy>
        <Energy Type1="CellB" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA_1" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA_2" Type2="CellB">10.0</Energy>
        <Energy Type1="CellB" Type2="CellC">10.0</Energy>
        <Energy Type1="CellB" Type2="CellB">10.0</Energy>
        <Energy Type1="CellD" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellD">10.0</Energy>
        <Energy Type1="CellA" Type2="CellD">10.0</Energy>
        <Energy Type1="CellA_1" Type2="CellD">10.0</Energy>
        <Energy Type1="CellA_2" Type2="CellD">10.0</Energy>
        <Energy Type1="CellC" Type2="CellD">10.0</Energy>
        <Energy Type1="CellB" Type2="CellD">10.0</Energy>
        <Energy Type1="CellD" Type2="CellD">10.0</Energy>
    </Plugin>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Lambda="1000.0" Type="Cell"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
    <Plugin Name="Secretion">
   </Plugin>
    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="Oxygen">
            <DiffusionData>
                <FieldName>Oxygen</FieldName>
                <GlobalDiffusionConstant>0.9</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>x/100</InitialConcentrationExpression>
                <DiffusionCoefficient CellType="Cell">0.9</DiffusionCoefficient>
                <DecayCoefficient CellType="Cell">1e-05</DecayCoefficient>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="0.0"></ConstantValue>
                    <ConstantValue PlanePosition="Max" Value="1.0"></ConstantValue>
                </Plane>
                <Plane Axis="Y">
                    <ConstantDerivative PlanePosition="Min" Value="0.0"></ConstantDerivative>
                    <ConstantDerivative PlanePosition="Max" Value="0.0"></ConstantDerivative>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
    </Steppable>
    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="74" y="83" z="0"></BoxMin>
            <BoxMax x="87" y="96" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
        <Region>
            <BoxMin x="170" y="12" z="0"></BoxMin>
            <BoxMax x="183" y="25" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellA</Types>
        </Region>
        <Region>
            <BoxMin x="198" y="269" z="0"></BoxMin>
            <BoxMax x="211" y="282" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellB</Types>
        </Region>
    </Steppable>
</CompuCell3D>
